// ********** Image Types

(FixedInternalImagePixelType "float")
(FixedImageDimension 2)
(MovingInternalImagePixelType "float")
(MovingImageDimension 2)


// ********** Components

(Registration "MultiResolutionRegistrationWithFeatures")
(FixedImagePyramid "FixedSmoothingImagePyramid" "FixedSmoothingImagePyramid" "FixedSmoothingImagePyramid" "FixedSmoothingImagePyramid" "FixedSmoothingImagePyramid" "FixedSmoothingImagePyramid" "FixedSmoothingImagePyramid" "FixedSmoothingImagePyramid" "FixedSmoothingImagePyramid")
(MovingImagePyramid "MovingSmoothingImagePyramid" "MovingSmoothingImagePyramid" "MovingSmoothingImagePyramid" "MovingSmoothingImagePyramid" "MovingSmoothingImagePyramid" "MovingSmoothingImagePyramid" "MovingSmoothingImagePyramid" "MovingSmoothingImagePyramid" "MovingSmoothingImagePyramid")
(Interpolator "BSplineInterpolator" "BSplineInterpolator" "BSplineInterpolator" "BSplineInterpolator" "BSplineInterpolator" "BSplineInterpolator" "BSplineInterpolator" "BSplineInterpolator" "BSplineInterpolator")
(Metric "KNNGraphAlphaMutualInformation")
(Optimizer "StandardGradientDescent")
(ResampleInterpolator "FinalBSplineInterpolator")
(Resampler "DefaultResampler")
(Transform "BSplineTransform")


// ********** Pyramid

// Total number of resolutions
(NumberOfResolutions 3)
(ImagePyramidSchedule 8 8 4 4 4 2 2 2 1)
(FixedImageBSplineInterpolatorOrder 1)



// ********** Transform

//(UpsampleGridOption "true" )
(FinalGridSpacingInPhysicalUnits 20.0 20.0)
(GridSpacingSchedule 4.0 2.0 1.0)
(HowToCombineTransforms "Compose")


// ********** Optimizer


// Maximum number of iterations in each resolution level:
(MaximumNumberOfIterations 100)

//SP: Param_a in each resolution level. a_k = a/(A+k+1)^alpha
(SP_a 150.0)

//SP: Param_alpha in each resolution level. a_k = a/(A+k+1)^alpha
(SP_alpha 0.602)

//SP: Param_A in each resolution level. a_k = a/(A+k+1)^alpha
(SP_A 50.0)



// ********** Metric

(Alpha 0.99)
(AvoidDivisionBy 0.0000000001)
(TreeType "KDTree")
(BucketSize 50)
//(SplittingRule "ANN_KD_SL_MIDPT")
//(ShrinkingRule "ANN_BD_SIMPLE")
(SplittingRule "ANN_KD_STD")
(ShrinkingRule "ANN_BD_SIMPLE")
(TreeSearchType "Standard")
(KNearestNeighbours 25)
(ErrorBound 10.0)


// ********** Several

(WriteTransformParametersEachIteration "false")
(WriteTransformParametersEachResolution "false")
(WriteResultImageAfterEachResolution "true")
(WritePyramidImagesAfterEachResolution "false")
(WriteResultImage "true")
(ShowExactMetricValue "false")
(ErodeMask "true")
(ResultImageFormat "tif") 

// ********** ImageSampler

//Number of spatial samples used to compute the mutual information in each resolution level:
(ImageSampler "MultiInputRandomCoordinate")
(NumberOfSpatialSamples 5000)
(NewSamplesEveryIteration "true")
(UseRandomSampleRegion "false")
(CheckNumberOfSamples "true")
(MaximumNumberOfSamplingAttempts 5)


// ********** Interpolator and Resampler

//Order of B-Spline interpolation used in each resolution level:
(BSplineInterpolationOrder 1)

//Order of B-Spline interpolation used for applying the final deformation:
(FinalBSplineInterpolationOrder 3)

//Default pixel value for pixels that come from outside the picture:
(DefaultPixelValue 0)
